OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)
Comment
  LEFT HAND
Comment
  RIGHT HAND
Comment
  python script that compares two inputs:betaERD from left hemisphere and from right
  output of this function should be the answer, where value is greater

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Signal=#0.Signal stream, Channel localization=#0.Channel localisation -> 2D topographic map
  Interpolation type = 1
  Delay (in s) = 0
#0.Signal stream -> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Channel Selector "10"
  Channel List = 10
  Action = Select
  Channel Matching Method = Smart
-> Spectral analysis (FFT) => #6
  Spectral components = Amplitude
#6.Amplitude -> beta power => #7
  Frequencies to select = 13:25
#2 -> Time based epoching
  Epoch 1 duration (in sec) = 15
  Epoch 1 intervals (in sec) = 0.0
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Channel Selector "10"
  Channel List = 10
  Action = Select
  Channel Matching Method = Smart
-> Spectral analysis (FFT) => #11
  Spectral components = Amplitude
#11.Amplitude -> beta power
  Frequencies to select = 13:25
-> Simple DSP
  Equation = x
-> Univariate Statistics => #14
  Mean = true
  Variance = true
  Range = true
  Median = true
  IQR = true
  Percentile = true
  Percentile value = 30
A=#7, B=#14.Mean -> Simple DSP "E(beta)-E(beta)_ref" => #15
  Equation = A-B
A=#15, B=#14.Mean -> Simple DSP => #16
  Equation = A/B
#2 -> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Channel Selector "12"
  Channel List = 12
  Action = Select
  Channel Matching Method = Smart
-> Spectral analysis (FFT) => #20
  Spectral components = Amplitude
#20.Amplitude -> beta power => #21
  Frequencies to select = 13:25
#2 -> Time based epoching
  Epoch 1 duration (in sec) = 15
  Epoch 1 intervals (in sec) = 0.0
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Channel Selector "12"
  Channel List = 12
  Action = Select
  Channel Matching Method = Smart
-> Spectral analysis (FFT) => #25
  Spectral components = Amplitude
#25.Amplitude -> beta power
  Frequencies to select = 13:25
-> Simple DSP
  Equation = x
-> Univariate Statistics => #28
  Mean = true
  Variance = true
  Range = true
  Median = true
  IQR = true
  Percentile = true
  Percentile value = 30
A=#21, B=#28.Mean -> Simple DSP "E(beta)-E(beta)_ref" => #29
  Equation = A-B
A=#29, B=#28.Mean -> Simple DSP => #30
  Equation = A/B
A=#16, B=#30 -> Simple DSP
  Equation = A<>B
-> Analog VRPN Server
  Peripheral name = openvibe-vrpn
