OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Time based epoching
  Epoch 1 duration (in sec) = 10
  Epoch 1 intervals (in sec) = 0.5
-> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.5
  High cut frequency (Hz) = 70
  Pass band ripple (dB) = 0.5
-> Temporal filter "alpha"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 12
  Pass band ripple (dB) = 0.5
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #6
  Equation = log(1+x)
-> Channel Selector "F3" => #7
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
#6 -> Channel Selector "F4" => #8
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart
Input - A=#7, Input - B=#8 -> Simple DSP => #9
  Equation = (a-b)/(a+b)
#2 -> Temporal filter "beta"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 12
  High cut frequency (Hz) = 25
  Pass band ripple (dB) = 0.5
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #13
  Equation = log(1+x)
#2 -> Temporal filter "gamma"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 25
  High cut frequency (Hz) = 60
  Pass band ripple (dB) = 0.5
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #17
  Equation = log(1+x)
#2 -> Temporal filter "delta"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0,5
  High cut frequency (Hz) = 4
  Pass band ripple (dB) = 0.5
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #21
  Equation = log(1+x)
#2 -> Temporal filter "theta"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 8
  Pass band ripple (dB) = 0.5
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #25
  Equation = log(1+x)
Input - A=#6, Input - B=#13, Input - C=#17, Input - D=#21, Input - E=#25 -> Simple DSP "relative alpha power"
  Equation = a/(a+b+c+d+e)
-> Simple DSP "inverse alpha power" => #27
  Equation = 1/x
Input 1=#27, Input 2=#9 -> Signal Merger
-> CSV File Writer
  Filename = record-[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Data=#0.Signal stream -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

Clock stimulator => #31
  Interstimulation interval (in sec) = 3.0
  Stimulation = OVTK_GDF_100_Watt
Clock stimulator => #32
  Interstimulation interval (in sec) = 5.0
  Stimulation = OVTK_StimulationId_VisualStimulationStop
Input stimulations 1=#31, Input stimulations 2=#32 -> Stimulation multiplexer
-> Display cue image
  Display images in full screen = true
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = ${Player_ScenarioDirectory}/IAPS_selections/SPECS_migraine_study/Negative_HighA/6260.jpg
  Stimulation 1 = OVTK_GDF_100_Watt
